CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20150910190903
GitHash:207f5bf
ModuleCount:7
HasImagePlaneDetails:False

LoadData:[module_num:1|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notes:['Loads data from URL; intended for use with image lists generated by Jenkins.']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
    Input data file location:URL|
    URL of the file:http://localhost:8080/userContent/cp_imagelists/translocation_imageList.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|None
    Process just a range of rows?:No
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    Group images by metadata?:No
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    Rescale intensities?:Yes

IdentifyPrimaryObjects:[module_num:2|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notes:['Nuclear segmentation.  Adjust "threshold correction factor" as needed (0-1 more lenient, greater than 1 more stringent).']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
    Select the input image:DAPI_ORIG
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):14,55
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.000000,1.000000
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Method to calculate adaptive window size:Image size
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
IdentifySecondaryObjects:[module_num:3|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notes:['DEFINE CELL BOUNDARY WITH COLLAR (20 PIXELS).  Adjust "Number of pixels to expand the primary objects" as needed.  Applied to FITC image.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - B
    Select the input image:FITC_ORIG
    Number of pixels by which to expand the primary objects:20
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:0.6
    Lower and upper bounds on threshold:0.000000,1.000000
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifyTertiaryObjects:[module_num:4|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notes:['Subtracts nuclei from cell boundary to leave cytoplasm.']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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Name the outline image:CytoplasmOutlines
    Retain outlines of the tertiary objects?:Yes
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:5|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notes:['Adds intensity measurements of Nuclei and Cytoplasm.']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
    Hidden:1
    Select an image to measure:FITC_ORIG
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei

CalculateMath:[module_num:6|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notes:['Calculates ratio of nuclear to cytoplasmic intensity per object.']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
    Name the output measurement:Nuclear_to_cytoplasmic_ratio
    Operation:Divide
    Select the first operand measurement type:Object
    Select the first operand objects:Nuclei
    Select the first operand measurement:Intensity_MedianIntensity_FITC_ORIG
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Select the second operand measurement type:Object
    Select the second operand objects:Cytoplasm
    Select the second operand measurement:Intensity_MedianIntensity_FITC_ORIG
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1
    Add to the result:0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:7|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notes:['Export module required for Jenkins.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|None
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image_\\\\g<Barcode>_\\\\g<RowNumber>_\\\\g<Column>.csv
    Use the object name for the file name?:No
